PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = misty_module
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent intstructs
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please answer the following artimetic questions to the best of your ability.

        You will be measured on both speed and accuracy.

        To ensure that we can use your results and complete our research we need you to perform at the level of your peers (indicated by the red arrow)

        Good luck!

        Press space to start
    KeyboardComponent space_to_cont
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine sum_routine1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import misty
        # Set variables
        pointer_pos = 0  # x position of pointer
        msg = ""  # feedback message
        eq = ""  # equation string
        streak_count = 0  # current streak
        total_cor = 0  # total number of correct answers
        rt_list = []  # list of reaction times
        time = 10  # starting value for trial time
        difficulty = "easy1"  # diffculty of equation
        time_coef = 1  # amount to reduce trial time by
        trial_counter = 0  # current trial
        ### Check for serial connection
        evntlg = 'sr' in locals() or 'sr' in globals()
        if evntlg :    difbyt="02".encode()
      Begin Routine:
        msg = ""
        timer = core.CountdownTimer(time)
        x = misty.MistSums()
        x.make_equation(difficulty)
        eq = "%s = ?" %(x.equation)
        ans = int(x.ans)
        timeout = False

        # If serial object is loaded then use it
        if evntlg :    sr.write(difbyt)
      Each Frame:
        if timer.getTime() <= 0:
            continueRoutine = False
            timeout = True
      End Routine:
        # Set serial to 0 if running
        if evntlg:  sr.write("10".encode())

        ## Save responses
        thisExp.addData('streak.count', streak_count)
        thisExp.addData('time.coef', time_coef)
        thisExp.addData('total.cor', total_cor)

        # Set variables and adjust pointer
        this_key = "emp"
        if len(key_resp.keys) > 0:
            this_key = int(key_resp.keys[0])
        this_resp =[slider.getRating(), this_key]

        if  ans in this_resp:
            msg = "Correct!"  # For correct trials add one to
            streak_count += 1   # correct counter
            total_cor += 1     # and total correct.
            pointer_pos -= 0.005  # increase userAverage pointer by 0.05

        elif (timeout is True):
            msg = "Time-Out!"
            if streak_count < 0:
                streak_count = 0 # combo-breakakaka
                streak_count -= 1
                pointer_pos += 0.1

        elif ans not in this_resp: # For incorrect answers
            msg = "Incorrect!"
            if streak_count > 0:
                streak_count = 0
                streak_count -= 1  # set streak to 0 and minus 1 (count incorrect)
                pointer_pos += 0.1  # add 0.1 to userAverage pointer (1-userAv)

        if pointer_pos >= 1.8:
            pointer_pos = 1.8

        if timeout:
            RT = time
        else:
            if slider.getRT() is None:
                RT = key_resp.rt
            else:
                RT = slider.getRT()
        if total_cor < 5:  # Sets difficulty of sums at four steps
            difficulty = "easy1"  # just +- sums, 2 integers 0-9
            if evntlg :    difbyt="02".encode()
        elif total_cor == 5:
            difficulty = "easy2"  # just +- sums, 3 integers 0-9
            if evntlg :    difbyt="03".encode()
        elif total_cor == 10:
            difficulty = "med1"  # +-* sums, 3 integers 0-9
            if evntlg :    difbyt="04".encode()
        elif total_cor == 15:
            difficulty = "med2"  # +-* sums, 3 integers 0-99
            if evntlg :    difbyt="05".encode()
        elif total_cor == 20:
            difficulty = "hard"  # +-/* sums, 3 integers 0-99
            if evntlg :    difbyt="06".encode()

        # print(corCount)
        # print(time)

        trial_counter += 1
        rt_list.append(RT)

        if trial_counter > 5:
            time = np.mean(rt_list) * time_coef
            if streak_count == 3:  # every 3 correct answers reduces the mean time by 10%
                time_coef = (time_coef * 0.9)
                streak_count = 0  # resets the counter

            if streak_count == -3:  # every three incorrect answers
                time_coef = (time_coef / 0.9) # time is increased by 10%
                cor_count = 0  # resets counter

        ### save message (Corr, Timeout, Incor
        thisExp.addData('trial.outcome', msg)
    ProgressComponent prog
      anchor = top-left
      borderColor = white
      color = $(1.0000, -1.0000, -1.0000)
      fillColor = $(-1.0000, 0.5373, -1.0000)
      lineWidth = 4
      pos = (-0.5, 0.5)
      progress [set every frame] = $0 + (timer.getTime()/time)
      size = (1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent greenbar
      anchor = center-left
      fillColor = $(-1.0000, 0.0039, -1.0000)
      pos = (1/3, 0.7)
      shape = rectangle
      size = (2/3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent yellowbar
      anchor = center-left
      fillColor = $(1.0000, 1.0000, -1.0000)
      pos = (-1/3, 0.7)
      shape = rectangle
      size = (2/3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent redbar
      anchor = center-left
      fillColor = $(1.0000, -1.0000, -1.0000)
      pos = (-1, 0.7)
      shape = rectangle
      size = (2/3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    PolygonComponent arrow
      fillColor = white
      pos [set every repeat] = $(1-pointer_pos, 0.6)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      units = norm
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text [set every repeat] = $eq
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    SliderComponent slider
      color = $(-1.0000, 0.0039, 0.0039)
      fillColor = $(1.0000, -0.4588, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      styles = choice
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9)
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = "1","2","3","4","5","6","7","8","9","0"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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  Routine feedback
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine fixation
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import serial
        try:
            sr = serial.Serial("INSERTCOMHERE", 115200, timeout=1)
            print("Serial Connected")
        except serial.serialutil.SerialException:
            print("Serial Not Connected")

        evntlg = 'sr' in locals() or 'sr' in globals()
      Begin Experiment:
        if evntlg :
            sr.write("RR".encode())
            core.wait(0.025) #wait 25 mS after resetting
            sr.write("0F".encode()) #Exp started
            core.wait(0.10) #wait 100MS resetting
            sr.write("00".encode()) #Exp started
      Begin Routine:
        if evntlg :  sr.write("01".encode()) #Fixation signal
      End Experiment:
        if evntlg :
            sr.flush()
            sr.close()
      End Routine:
        if evntlg :    sr.write("00".encode()) #set lines to zero
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine fixation
    Routine sum_routine1
    Routine feedback
  LoopTerminator trials
